# 1 "/opt/topspin3.0/exp/stan/nmr/lists/pp/user/jresgpprqf2.jj"
;jresgpprqf.cl
;avance-version (09/04/17)
;homonuclear J-resolved 2D correlation
;with presaturation during relaxation delay
;using gradients
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=
;
; CL-08022011
; added NOESY-presat
; added bipolar gradients for improved water suppression
; new phase cycle

prosol relations=<triple>

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

"p2=p1*2"
"d11=30m"
"d12=20u"
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"in0=inf1/4"

"d0=3u"

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define delay MCWRK
define delay MCREST
define delay d0orig
"d0orig=d0"
define loopcounter t1loop
"t1loop=0"
define loopcounter ph1loop
"ph1loop=0"
define loopcounter ST1CNT
"ST1CNT = td1/(1)"
"MCWRK = 0.500000*d11"
"MCREST = d11 - d11"

    dccorr
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1 ze
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2 MCWRK 
LBLST1, MCWRK
  MCREST
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3 d12 pl9:f1
  d1 cw:f1 ph29
  4u do:f1
  d12 pl1:f1
  50u setnmr3|0 setnmr0|34|32|33 ctrlgrad 0
  p16:gp1
  d16 pl1:f1
  p1 ph1
  4u
  p1 ph2
  d12 pl9:f1
  d8 cw:f1
  4u do:f1
  p16:gp2
  d16 pl1:f1
  4u
  p1 ph3
  d0
  p16:gp3
  d16 pl0:f1
  (p12:sp1 ph14:r):f1
  d12 pl1:f1
  p2 ph4
  p16:gp3
  d16
  d0
  d0
  p16:gp4
  d16 pl0:f1
  (p12:sp1 ph15:r):f1
  d12 pl1:f1
  p2 ph5
  4u
  p16:gp4
  d16
  d0 

  4u

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  go=2 ph31

  4u setnmr3^0 setnmr0^34^32^33 ctrlgrad 7

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  MCWRK  wr #0 if #0 zd 

  "t1loop+=1"
      "d0=d0orig + t1loop * in0 "
  lo to LBLST1 times ST1CNT
  MCWRK 
  "t1loop=0"
  MCWRK
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exit


ph1=0 2
ph2=0
ph3=0 0 2 2 1 1 3 3
ph4=0 1 2 3
ph5=0 0 0 0 1 1 1 1
ph14=2 3 0 1
ph15=2 2 2 2 3 3 3 3
ph29=0
ph31=0 0 2 2 3 3 1 1
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;pl1 : f1 channel - power level for pulse (default)
;pl9 : f1 channel - power level for presaturation
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel -  180 degree high power pulse
;p16: homospoil/gradient pulse                       [1 msec]
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                             [30msec]
;d12: delay for power switching                      [20 usec]
;d16: delay for homospoil/gradient recovery
;inf1: 1/w, w = max. width of multiplet
;in0: 1/(2 * w), w = max. width of multiplet
;nd0: 2
;NS: 4 * n
;DS: 16
;td1: number of experiments
;FnMODE: QF


;use gradient ratio:    gp 1 : gp 2
;                         10 :   10
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;for z-only gradients:
;gpz1: 10%
;gpz2: 10%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100

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;$Id: jresgpprqf,v 1.3 2009/07/02 16:40:45 ber Exp $
