# 1 "C:/Bruker/TopSpin3.5pl2/exp/stan/nmr/lists/pp/noesygppr1d"
;noesygppr1d
;avance-version (12/01/11)
;with presaturation during relaxation delay and mixing time
;   and spoil gradient
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=
;$RECOMMEND=y


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"d12=20u"


"acqt0=-p0*2/3.1416"
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; dimension 1D; AQ_mode 
define delay MCWRK
define delay MCREST
"MCREST = 30m - 30m"
"MCWRK = 0.333333*30m"

    dccorr
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1 ze
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2 MCWRK  * 2
LBLF0, MCWRK
  MCREST
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
  4u setnmr3^0 setnmr0^34^32^33 ctrlgrad 7
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  d12 pl9:f1
  d1 cw:f1 ph29
  4u do:f1
  50u setnmr3|0 setnmr0|34|32|33 ctrlgrad 0
  p16:gp1
  d16 pl1:f1
  p1 ph1
  4u
  p1 ph2
  d12 pl9:f1
  d8 cw:f1
  4u do:f1
  p16:gp2
  d16 pl1:f1


  4u
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  p0 ph3
  go=2 ph31
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  MCWRK wr #0
  MCWRK zd
  lo to LBLF0 times td0

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
  4u setnmr3^0 setnmr0^34^32^33 ctrlgrad 7
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exit


ph1=0 2 
ph2=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph3=0 0 2 2 1 1 3 3
ph29=0
ph31=0 2 2 0 1 3 3 1 2 0 0 2 3 1 1 3
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;pl1 : f1 channel - power level for pulse (default)
;pl9 : f1 channel - power level for presaturation
;p0 : for any flip angle
;p1 : f1 channel -  90 degree high power pulse
;p16: homospoil/gradient pulse
;d1 : relaxation delay; 1-5 * T1
;d8 : mixing time
;d12: delay for power switching                      [20 usec]
;d16: delay for homospoil/gradient recovery
;ns: 8 * n, total number of scans: NS * TD0
;ds: 4


;use gradient ratio:    gp 1 : gp 2
;                         50 :  -10
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;for z-only gradients:
;gpz1: 50%
;gpz2: -10%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100

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                                          ;preprocessor-flags-start
;1: for setnmr3^0 setnmr0^34^32^33 ctrlgrad 7 before d1 rather than go
;             option -DFLAG_BLK: (eda: ZGOPTNS)
                                          ;preprocessor-flags-end


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;$Id: noesygppr1d,v 1.10 2012/01/31 17:49:27 ber Exp $
